<?xml version="1.0"?>
<monkeyml version="1.0">
    <io_devices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 tag="IO Devices">
        <iodevice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 tag="FM" priority="" type="fake_monkey" id=""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></iodevice>
        <iodevice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 tag="ITC" priority="" alt="FM" type="ITC18" id=""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>
            <iochannel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 device="ITC18" variable="TTLchannel0" capability="ITC18_TTL_INPUT0" data_type="digital" direction="input" synchrony="hardware_timed_synchronous" range_min="0" range_max="5" resolution="1" update_interval="5ms" data_interval="0.5ms" tag="ioTTLchannel0" TTL_trigger_port="0" pre_trigger_interval="5ms" post_trigger_interval="5ms"></iochannel>
            <iochannel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 variable="juice" capability="ITC18_TTL_ASYCH_OUT00" data_type="pulse_active_high" direction="output" synchrony="asynchronous" range_min="0" range_max="5" resolution="1" update_interval="3ms" data_interval="1ms" TTL_trigger_port="0" pre_trigger_interval="5ms" post_trigger_interval="5ms" tag="juiceChannel"></iochannel>
        </iodevice>
    </io_devices>
    <variables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 tag="Variables">
        <folder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 tag="Behavioral Control">
            <variable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 tag="tooFastTimeMs" scope="global" logging="when_changed" default_value="100" type="integer" persistant="1"></variable>
            <variable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 tag="rewardDuration_us" scope="global" logging="when_changed" default_value="20000" type="integer" persistant="1"></variable>
            <variable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 tag="reactTimeMs" scope="global" logging="when_changed" default_value="3000" type="integer" persistant="1"></variable>
            <variable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 tag="randReqHoldMinMs" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
            <variable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 tag="randReqHoldMaxMs" scope="global" logging="when_changed" default_value="300" type="integer" persistant="1"></variable>
            <variable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 tag="fixedReqHoldTimeMs" scope="global" logging="when_changed" default_value="1000" type="integer" persistant="1"></variable>
        </folder>
        <folder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 tag="Stimuli">
            <variable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 tag="gratingAzimuthDeg" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
            <variable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 tag="gratingDirectionDeg" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable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 tag="gratingElevationDeg" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
            <variable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 tag="gratingHeightDeg" scope="global" logging="when_changed" default_value="5" type="integer" persistant="1"></variable>
            <variable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 tag="gratingSpatialFreqCPD" scope="global" logging="when_changed" default_value="0.5" type="integer" persistant="1"></variable>
            <variable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 tag="gratingSpeedDPS" scope="global" logging="when_changed" default_value="1" type="integer" persistant="1"></variable>
            <variable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 tag="gratingWidthDeg" scope="global" logging="when_changed" default_value="10" type="integer" persistant="1"></variable>
        </folder>
        <folder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 tag="Fake Mouse">
            <variable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 tag="doLever" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="1"></variable>
            <variable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 tag="fakeMouseMaxPressMs" scope="global" logging="when_changed" default_value="1000" type="integer" persistant="1"></variable>
            <variable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 tag="fakeMouseMinPressMs" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
            <variable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 tag="fakeMouseMinReactMs" scope="global" logging="when_changed" default_value="1300" type="integer" persistant="1"></variable>
            <variable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 tag="fakeMouseMaxReactMs" scope="global" logging="when_changed" default_value="1500" type="integer" persistant="1"></variable>
        </folder>
        <folder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 tag="Task Status">
            <variable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 tag="failure" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable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 tag="leverUp" scope="global" logging="when_changed" default_value="0" type="boolean"></variable>
            <variable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 tag="leverDown" scope="global" logging="when_changed" default_value="0" type="boolean"></variable>
            <variable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 tag="stimulusOn" scope="global" logging="when_changed" default_value="0" type="boolean"></variable>
            <variable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 tag="success" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable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 tag="ignore" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable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 tag="trialStart" scope="global" logging="when_changed" default_value="0" type="boolean"></variable>
        </folder>
        <folder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 tag="Online Display">
            <variable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 tag="sync" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        </folder>
        <folder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 tag="Hardware variables">
            <variable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 tag="TTLchannel0" full_name="TTLchannel0" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"></variable>
        </folder>
        <folder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 tag="Internal Variables">
            <variable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 tag="tTotalReqHoldTimeMs" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable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 tag="tRandReqHoldTimeMs" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable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 tag="tFakeMouseReactMs" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable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 tag="juice" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        </folder>
    </variables>
    <sounds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 tag="Sounds">
        <sound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 tag="leverPressSound" type="wav_file" path="wavs/7G.wav"></sound>
        <sound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 tag="trialStartSound" type="wav_file" path="/Users/histed/MW-ExperimentXML-maunsell/JuiceOnHold/wavs/5C.wav"></sound>
        <sound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 tag="correctSound" type="wav_file" path="/Users/histed/MW-ExperimentXML-maunsell/JuiceOnHold/wavs/shortCorrect.wav"></sound>
        <sound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 tag="incorrectSound" type="wav_file" path="wavs/100msSq.wav"></sound>
        <sound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 tag="rewardSound" type="wav_file" path="wavs/shortCorrect.wav"></sound>
    </sounds>
    <stimuli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 tag="Stimuli">
        <stimulus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 type="rectangle" tag="testRect" color="1,1,1" x_size="50" y_size="50" x_position="0" y_position="0" rotation="0" contrast="1"></stimulus>
        <stimulus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 type="drifting_grating" tag="gratingStimulus" frames_per_second="15" statistics_reporting="0" error_reporting="0" direction="gratingDirectionDeg" starting_phase="0" spatial_frequency="gratingSpatialFreqCPD" speed="gratingSpeedDPS" grating_type="sinusoid" mask="gaussian" x_size="gratingWidthDeg" y_size="gratingHeightDeg" x_position="gratingAzimuthDeg" y_position="gratingElevationDeg" rotation="0" alpha_multiplier="1"></stimulus>
    </stimuli>
    <experiment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 tag="Experiment" full_name="DigitalInExample">
        <protocol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 tag="Protocol" full_name="Protocol" interruptable="YES" selection="sequential_ascending" nsamples="1" sampling_method="cycles" description="" interruptible="YES">
            <task_system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 tag="Preamble" interruptible="YES">
                <task_system_state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 tag="openITC" full_name="openITC" interruptable="YES" description="" interruptible="YES">
                    <action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 type="assignment" tag="juice = 0" variable="juice" value="0"></action>
                    <transition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 type="yield" tag="Exit Task System..."></transition>
                </task_system_state>
            </task_system>
            <trial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 tag="Trial" full_name="Trial" description="" interruptible="1" selection="sequential" nsamples="1000" sampling_method="cycles">
                <task_system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 tag="TS" full_name="TS" interruptable="YES" description="" interruptible="YES"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>
                    <task_system_state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 tag="Intertrial" interruptible="YES">
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                        <action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 type="start_timer" tag="Start Timer" timer="readTimer" timebase="" duration="10" duration_units="ms"></action>
                        <action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 type="assignment" tag="Clear trialStart" variable="trialStart" value="0"></action>
                        <action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 type="assignment" tag="Clear stimulusOn" variable="stimulusOn" value="0"></action>
                        <action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 type="assignment" tag="Clear leverup" variable="leverUp" value="0"></action>
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                        <transition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 type="timer_expired" tag="If Expired, Go To StartTrial" target="StartTrial" timer="readTimer"></transition>
                    </task_system_state>
                    <task_system_state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 tag="StartTrial" full_name="ReadDigitalIn" description="" interruptible="YES">
                        <action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 type="assignment" tag="Sync Matlab" variable="sync" value="1"></action>
                        <action tag="Start IO Device" type="start_device_IO" device="ITC"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></action>
                        <action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 type="assignment" tag="Set trialStart" variable="trialStart" value="1"></action>
                        <action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 type="if" tag="if fakeMouse" condition="!doLever">
                            <action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 type="start_timer" tag="Start Fake Mouse Press Timer" timer="fakeMousePressTimer" timebase="" duration="rand(fakeMouseMinPressMs, fakeMouseMaxPressMs)" duration_units="ms"></action>
                        </action>
                        <action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 type="if" tag="if !fakeMouse" condition="doLever">
                            <action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 type="start_timer" tag="Start Fake Mouse Press Timer infinite" timer="fakeMousePressTimer" timebase="" duration="100000" duration_units="ms"></action>
                        </action>
                        <action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 type="report" tag="Report OpenITC" message="In OpenITC"></action>
                        <action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 tag="ReportDigital 1" full_name="ReportDigital 1" type="report" message="TTLchannel0 = $TTLchannel0"></action>
                        <action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 tag="Report Juice 1" full_name="Report juice 1" type="report" message="juice = $juice"></action>
                        <action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 tag="ReportReadDigitalIn" full_name="ReportReadDigitalIn" type="report" message="ReadDigitalIn"></action>
                        <transition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 type="conditional" tag="If Lever Down, Go To Hold Lever" condition="TTLchannel0 == 1" target="HoldLever"></transition>
                        <transition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 type="timer_expired" tag="If fakeMousePress expired, go to HoldLever" target="HoldLever" timer="fakeMousePressTimer"></transition>
                    </task_system_state>
                    <task_system_state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 tag="HoldLever" interruptible="YES">
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                        <action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 type="assignment" tag="Set leverDown" variable="leverDown" value="1"></action>
                        <action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 tag="Play Lever Press Sound" type="play_sound" sound="leverPressSound"></action>
                        <action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 type="assignment" tag="Assign tRandReqHoldTimeMs" variable="tRandReqHoldTimeMs" value="rand(randReqHoldMinMs,randReqHoldMaxMs)"></action>
                        <action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 type="assignment" tag="Assign tTotalReqHoldTimeMs" variable="tTotalReqHoldTimeMs" value="fixedReqHoldTimeMs + tRandReqHoldTimeMs"></action>
                        <action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 type="if" tag="if fakeMouse" condition="!doLever">
                            <action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 type="assignment" tag="Assign tFakeMouseReactMs" variable="tFakeMouseReactMs" value="rand(fakeMouseMinReactMs, fakeMouseMaxReactMs)"></action>
                            <action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 type="start_timer" tag="Start Fake Mouse Timer" timer="fakeMouseTimer" timebase="" duration="tFakeMouseReactMs" duration_units="ms"></action>
                            <action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 tag="Report FakeMouseTimer" full_name="Report Press" type="report" message="fake mouse to react in $tFakeMouseReactMs ms"></action>
                        </action>
                        <action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 type="start_timer" tag="Start LeverHold Timer" timer="leverHoldTimer" timebase="" duration="tTotalReqHoldTimeMs" duration_units="ms"></action>
                        <action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 tag="Report LeverDown" full_name="ReportDigital" type="report" message="LeverDown (need to hold for $tTotalReqHoldTimeMs + tooFastTime ms)"></action>
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                        <transition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 type="conditional" tag="If Lever Up, Go To EarlyRelease" condition="TTLchannel0 == 0 &amp;&amp; doLever == 1" target="EarlyRelease"></transition>
                        <transition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 type="timer_expired" tag="If fakeMouse expired, go to EarlyRelease" target="EarlyRelease" timer="fakeMouseTimer"></transition>
                        <transition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 type="timer_expired" tag="If leverHoldTimer Expired, Go To StimOn" target="StimOn" timer="leverHoldTimer"></transition>
                    </task_system_state>
                    <task_system_state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 tag="StimOn" interruptible="YES">
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                        <action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 type="assignment" tag="Set StimulusOn" variable="stimulusOn" value="1"></action>
                        <action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 tag="Report StimOn" full_name="ReportDigital" type="report" message="StimOn"></action>
                        <action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 type="start_timer" tag="Start Too Fast Timer" timer="tooFastTimer" timebase="" duration="tooFastTimeMs" duration_units="ms"></action>
                        <action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 type="start_timer" tag="Start React Timer" timer="reactTimeTimer" timebase="" duration="reactTimeMs" duration_units="ms"></action>
                        <action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 tag="Report" full_name="ReportDigital" type="report" message="R - lq"></action>
                        <action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 tag="Live Queue Stimulus" type="live_queue_stimulus" stimulus="gratingStimulus"></action>
                        <action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 tag="Report 2" full_name="ReportDigital" type="report" message="R - sg"></action>
                        <action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 tag="Start Grating" stimulus="gratingStimulus" type="play_dynamic_stimulus"></action>
                        <action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 tag="Report 3" full_name="ReportDigital" type="report" message="R - us"></action>
                        <action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 tag="Update Stimulus" type="update_stimulus_display"></action>
                        <action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 tag="Report 4" full_name="ReportDigital" type="report" message="R - ps"></action>
                        <action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 tag="Play Sound" type="play_sound" sound="trialStartSound"></action>
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                        <transition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 type="direct" tag="Always Go to CheckTooFastTime" target="CheckTooFastTime"></transition>
                    </task_system_state>
                    <task_system_state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 tag="CheckTooFastTime" interruptible="YES">
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                        <action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 tag="Report CheckTooFastTime" full_name="ReportDigital" type="report" message="CheckTooFastTime"></action>
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                        <transition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 type="timer_expired" tag="if tooFastTimer expired, go to React" target="React" timer="tooFastTimer"></transition>
                        <transition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 type="conditional" tag="If LeverUp, go to EarlyRelease" condition="TTLchannel0 == 0 &amp;&amp; doLever == 1" target="EarlyRelease"></transition>
                        <transition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 type="timer_expired" tag="If fakeMouseTimer expired, go to EarlyRelease" target="EarlyRelease" timer="fakeMouseTimer"></transition>
                    </task_system_state>
                    <task_system_state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 tag="React" interruptible="YES">
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                        <action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 tag="Report React" full_name="ReportDigital" type="report" message="React"></action>
                        <action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 tag="ReportDigital 4" full_name="ReportDigital" type="report" message="TTLchannel0 = $TTLchannel0"></action>
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                        <transition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 type="conditional" tag="If Lever Up, Go To Reward" condition="TTLchannel0 == 0 &amp;&amp; doLever == 1" target="Reward"></transition>
                        <transition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 type="timer_expired" tag="If fakeMouse expired, Transition to Reward" target="Reward" timer="fakeMouseTimer"></transition>
                        <transition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 type="timer_expired" tag="If React Time Expired, Go To Failed" target="Failed" timer="reactTimeTimer"></transition>
                    </task_system_state>
                    <task_system_state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 tag="EarlyRelease" interruptible="YES">
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                        <action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 type="assignment" tag="Set LeverUp Early" variable="leverUp" value="1"></action>
                        <action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 tag="ReportEarlyRelease" full_name="ReportDigital" type="report" message="** Early Release"></action>
                        <action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 type="assignment" tag="failure++" variable="failure" value="failure+1"></action>
                        <action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 tag="Play Sound 2" type="play_sound" sound="incorrectSound"></action>
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                        <transition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 type="direct" tag="Go To EndTrial" target="EndTrial"></transition>
                    </task_system_state>
                    <task_system_state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 tag="Reward" interruptible="YES">
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                        <action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 type="assignment" tag="Set LeverUp" variable="leverUp" value="1"></action>
                        <action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 tag="Report Reward" full_name="ReportDigital" type="report" message="** Success"></action>
                        <action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 tag="ReportJuice 4" full_name="ReportDigital" type="report" message="juice= $juice"></action>
                        <action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 type="assignment" tag="success++" variable="success" value="success+1"></action>
                        <action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 type="assignment" tag="Start reward" variable="juice" value="rewardDuration_us"></action>
                        <action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 tag="Play reward sound" type="play_sound" sound="rewardSound"></action>
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                        <transition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 type="direct" tag="Go To EndTrial" target="EndTrial"></transition>
                    </task_system_state>
                    <task_system_state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 tag="Failed" interruptible="YES">
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                        <action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 type="assignment" tag="failure++" variable="failure" value="failure + 1"></action>
                        <action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 tag="Report Failed" full_name="ReportDigital" type="report" message="** Failed (to respond in time)"></action>
                        <action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 tag="Play Failed Sound" type="play_sound" sound="incorrectSound"></action>
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                        <transition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 type="direct" tag="Go To EndTrial" target="EndTrial"></transition>
                    </task_system_state>
                    <task_system_state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 tag="EndTrial" interruptible="YES">
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                        <action tag="Stop IO Device" type="stop_device_IO" device="ITC"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></action>
                        <action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 type="report" tag="Report CloseITC" message="In CloseITC"></action>
                        <action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 tag="Stop dynamic stimulus" stimulus="gratingStimulus" type="stop_dynamic_stimulus"></action>
                        <action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 tag="Dequeue Stimulus 0" type="dequeue_stimulus" stimulus="gratingStimulus"></action>
                        <action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 tag="Update Stimulus 2" type="update_stimulus_display"></action>
                        <action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 type="assignment" tag="End Matlab Sync" variable="sync" value="0"></action>
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                        <transition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 type="direct" tag="Go To Intertrial" target="Intertrial"></transition>
                    </task_system_state>
                </task_system>
            </trial>
        </protocol>
    </experiment>
</monkeyml>