<?xml version="1.0"?>
<monkeyml version="1.0">
    <io_devices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 tag="IO Devices">
        <iodevice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 tag="FM" priority="" type="fake_monkey" id=""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></iodevice>
        <iodevice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 tag="ITC" priority="" alt="FM" type="ITC18" id=""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>
            <iochannel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 device="ITC18" variable="TTLchannel0" capability="ITC18_TTL_INPUT0" data_type="digital" direction="input" synchrony="hardware_timed_synchronous" range_min="0" range_max="5" resolution="1" update_interval="5ms" data_interval="0.5ms" tag="ioTTLchannel0" TTL_trigger_port="0" pre_trigger_interval="5ms" post_trigger_interval="5ms"></iochannel>
            <iochannel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 variable="juice" capability="ITC18_TTL_ASYCH_OUT00" data_type="pulse_active_high" direction="output" synchrony="asynchronous" range_min="0" range_max="5" resolution="1" update_interval="3ms" data_interval="1ms" TTL_trigger_port="0" pre_trigger_interval="5ms" post_trigger_interval="5ms" tag="juiceChannel"></iochannel>
        </iodevice>
    </io_devices>
    <variables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 tag="Variables">
        <variable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 tag="num_rewards" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
        <variable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 tag="success" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable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 tag="failure" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable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 tag="TTLchannel0" full_name="TTLchannel0" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"></variable>
        <variable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 tag="rewardDuration_us" scope="global" logging="when_changed" default_value="20000" type="integer"></variable>
        <variable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 tag="trialTime_s" scope="global" logging="when_changed" default_value="30" type="integer"></variable>
        <variable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 tag="readTime_ms" scope="global" logging="when_changed" default_value="250" type="integer"></variable>
        <variable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 tag="juice" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
    </variables>
    <sounds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 tag="Sounds">
        <sound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 tag="trialStartSound" type="wav_file" path="/Users/histed/Experiments/JuiceOnTap/wavs/5C.wav"></sound>
        <sound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 tag="correctSound" type="wav_file" path="/Users/histed/Experiments/JuiceOnTap/wavs/7C.wav"></sound>
        <sound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 tag="incorrectSound" type="wav_file" path="/Users/histed/Experiments/JuiceOnTap/wavs/300msSq.wav"></sound>
        <sound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 tag="rewardSound" type="wav_file" path="/Users/histed/Experiments/JuiceOnTap/wavs/shortCorrect.wav"></sound>
    </sounds>
    <stimuli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 tag="Stimuli"></stimuli>
    <experiment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 tag="Experiment" full_name="DigitalInExample">
        <protocol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 tag="Protocol" full_name="Protocol" interruptable="YES" selection="sequential_ascending" nsamples="1" sampling_method="cycles" description="" interruptible="YES">
            <block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 tag="Block" full_name="Block" interruptable="YES" selection="sequential_ascending" nsamples="10" sampling_method="cycles" description="" interruptible="YES">
                <trial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 tag="Trial" full_name="Trial" description="" interruptible="YES" selection="sequential_ascending" nsamples="5" sampling_method="cycles">
                    <task_system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 tag="TS" full_name="TS" interruptable="YES" description="" interruptible="YES">
                        <task_system_state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 tag="openITC" full_name="openITC" interruptable="YES" description="" interruptible="YES">
                            <action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 type="assignment" tag="initialize juice" variable="juice" value="0"></action>
                            <action tag="startIO" full_name="startIO" type="start_device_IO" device="ITC"></action>
                            <action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 tag="StartTrialTimer" full_name="StartTrialTimer" type="start_timer" timer="trialTimer" duration="trialTime_s" duration_units="s"></action>
                            <transition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 tag="goToReadDigitalIn" full_name="goToReadDigitalIn" target="ReadDigitalIn" type="direct"></transition>
                        </task_system_state>
                        <task_system_state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 tag="ReadDigitalIn" full_name="ReadDigitalIn" description="" interruptible="YES">
                            <action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 tag="Blank" full_name="ReportReadDigitalIn" type="report" message="[ ]"></action>
                            <action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 tag="ReportReadDigitalIn" full_name="ReportReadDigitalIn" type="report" message="ReadDigitalIn"></action>
                            <action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 tag="ReportDigital 1" full_name="ReportDigital 1" type="report" message="TTLchannel0 = $TTLchannel0"></action>
                            <action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 tag="Report Juice 1" full_name="Report juice 1" type="report" message="juice = $juice"></action>
                            <transition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 type="conditional" tag="If Condition is True, Transition to ..." condition="TTLchannel0 == 1" target="PlaySound"></transition>
                            <transition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 type="timer_expired" tag="If Timer Expired, Transition to ... 3" target="CloseITC" timer="trialTimer"></transition>
                        </task_system_state>
                        <task_system_state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 tag="PlaySound" interruptible="YES">
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                            <action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 tag="ReportPlaySound" full_name="ReportPlaySound" type="report" message="PlaySound"></action>
                            <action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 tag="ReportDigital 2" full_name="ReportDigital 1" type="report" message="TTLchannel0 = $TTLchannel0"></action>
                            <action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 tag="ReportJuice 2" full_name="Report juice 2" type="report" message="juice = $juice"></action>
                            <action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 tag="Play reward sound" type="play_sound" sound="rewardSound"></action>
                            <action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 type="assignment" tag="num_rewards++" variable="num_rewards" value="num_rewards+1"></action>
                            <action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 type="assignment" tag="Start reward" variable="juice" value="rewardDuration_us"></action>
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                            <transition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 type="direct" tag="GoToContinue" target="Continue"></transition>
                        </task_system_state>
                        <task_system_state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 tag="Continue" full_name="Continue" description="" interruptible="YES">
                            <action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 tag="ReportContinue" full_name="ReportDigital" type="report" message="Continue."></action>
                            <action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 tag="ReportDigital 3" full_name="ReportDigital 3" type="report" message="TTLchannel0 = $TTLchannel0"></action>
                            <action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 tag="ReportJuice 3" full_name="ReportJuice 3" type="report" message="juice = $juice"></action>
                            <action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 type="start_timer" tag="Start Timer" timer="readTimer" timebase="" duration="readTime_ms" duration_units="ms"></action>
                            <transition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 tag="goToReadDigitalInTE" full_name="goToReadDigitalInTE" target="LeverUp" type="timer_expired" timer="readTimer"></transition>
                            <transition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 type="timer_expired" tag="If Timer Expired, Transition to ... 2" target="CloseITC" timer="trialTimer"></transition>
                        </task_system_state>
                        <task_system_state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 tag="LeverUp" interruptible="YES">
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                            <action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 type="if" tag="Conditionally Execute Actions" condition="TTLchannel0 == 0">
                                <action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 tag="ReportLeverUp" full_name="ReportDigital" type="report" message="LeverUp"></action>
                                <action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 tag="ReportDigital 4" full_name="ReportDigital" type="report" message="TTLchannel0 = $TTLchannel0"></action>
                                <action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 tag="ReportJuice 4" full_name="ReportDigital" type="report" message="juice= $juice"></action>
                            </action>
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                            <transition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 type="conditional" tag="If Condition is True, Transition to ... 2" condition="TTLchannel0 == 0" target="ReadDigitalIn"></transition>
                            <transition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 type="timer_expired" tag="If Timer Expired, Transition to ..." target="CloseITC" timer="trialTimer"></transition>
                        </task_system_state>
                        <task_system_state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 tag="CloseITC" full_name="CloseITC" interruptable="YES" description="" interruptible="YES">
                            <action tag="stopIO" full_name="stopIO" type="stop_device_IO" device="ITC"></action>
                            <transition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 type="yield" tag="end" full_name="end"></transition>
                        </task_system_state>
                    </task_system>
                </trial>
            </block>
        </protocol>
    </experiment>
</monkeyml>